OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

GDF file reader => #0
  Filename = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/Registros/TAGS-[2023.11.13-15.57.54]S14.gdf
  Samples per buffer = 32
Data=#0.EEG stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Lua Stimulator => #2
  Lua Script = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/Epocas.lua
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGENES/1.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGENES/2.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGENES/3.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGENES/4.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGENES/5.png
  Stimulation 5 = OVTK_StimulationId_Label_05
#2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Signal=#0.EEG stream, Stimulations=#2 -> EDF File Writer
  Filename = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/Registros con Epocas/S14.edf
Signal=#0.EEG stream, Stimulation=#2 -> GDF file writer
  Filename = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/Registros con Epocas/S14.gdf
