OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Lua Stimulator => #0
  Lua Script = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/TP.lua
#0.Stimulations -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGES/1.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGES/2.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGES/3.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGES/4.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/IMAGES/5.png
  Stimulation 5 = OVTK_StimulationId_Label_05
#0.Stimulations -> Sound Player => #2
  PLAY trigger = OVTK_StimulationId_Label_10
  STOP trigger = OVTK_StimulationId_Label_11
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
Input stimulations 1=#2, Input stimulations 2=#0.New output -> Stimulation multiplexer => #3
Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#4.Signal stream, Stimulations=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#4.Signal stream, Stimulation=#3 -> GDF file writer
  Filename = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/1. Data Records/TAGS-[$core{date}-$core{time}].gdf
Input stream=#4.Signal stream, Stimulations stream=#4.Stimulations -> CSV File Writer
  Filename = C:/Users/EdgarAguilera/Documents/ParadigmaTradicional/1. Data Records/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
